# Generated by Configurator on Fri Mar 21 14:28:08 CDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM3,SerialManager,COM3
Device,MicroPublisher6,PVCAM,Camera-1
Device,XYStage,Prior,XYStage
Device,ZStage,Prior,ZStage
Device,DHub,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective
Device,ThorlabsKinesisDDR25,ThorlabsKinesis,ThorlabsKinesis
Device,KBD101_Thor_Rotation,ThorlabsKinesis,KBD101_28253598

# Pre-init settings for devices
Property,XYStage,Port,COM1
Property,ZStage,Port,COM1
Property,ThorlabsKinesisDDR25,EnableSimulatedDevices,Yes
Property,KBD101_Thor_Rotation,DeviceUnitsPerMillimeter,1.0000
Property,KBD101_Thor_Rotation,DeviceUnitsPerRevolution,1440000.0000
Property,KBD101_Thor_Rotation,StageType,Rotational

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references
Parent,DObjective,DHub
Parent,KBD101_Thor_Rotation,ThorlabsKinesisDDR25

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage,-1
FocusDirection,KBD101_Thor_Rotation,0

# Roles
Property,Core,Camera,MicroPublisher6
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DObjective
Label,DObjective,5,40xAdapter0.5
Label,DObjective,4,40x 0.5 red Pol
Label,DObjective,3,40x 0.75
Label,DObjective,2,20x 0.5 red Pol
Label,DObjective,1,20x 0.5
Label,DObjective,0,10x 0.3

# Configuration presets
# Group: ColorCam
# Preset: ColorOn 10x 5deg
ConfigGroup,ColorCam,ColorOn 10x 5deg,MicroPublisher6,Color,ON
ConfigGroup,ColorCam,ColorOn 10x 5deg,MicroPublisher6,Color - Algorithm CFA,G-B-R-G
ConfigGroup,ColorCam,ColorOn 10x 5deg,MicroPublisher6,Color - Blue scale,2.4344
ConfigGroup,ColorCam,ColorOn 10x 5deg,MicroPublisher6,Color - Green scale,1.0000
ConfigGroup,ColorCam,ColorOn 10x 5deg,MicroPublisher6,Color - Red scale,1.1621
ConfigGroup,ColorCam,ColorOn 10x 5deg,MicroPublisher6,Exposure,200.0000
ConfigGroup,ColorCam,ColorOn 10x 5deg,DObjective,Label,10x 0.3

# Preset: ColorOn 20x 0deg
ConfigGroup,ColorCam,ColorOn 20x 0deg,MicroPublisher6,Color,ON
ConfigGroup,ColorCam,ColorOn 20x 0deg,MicroPublisher6,Color - Algorithm CFA,G-B-R-G
ConfigGroup,ColorCam,ColorOn 20x 0deg,MicroPublisher6,Color - Blue scale,2.2428
ConfigGroup,ColorCam,ColorOn 20x 0deg,MicroPublisher6,Color - Green scale,1.0140
ConfigGroup,ColorCam,ColorOn 20x 0deg,MicroPublisher6,Color - Red scale,1.0000
ConfigGroup,ColorCam,ColorOn 20x 0deg,MicroPublisher6,Exposure,200.0000
ConfigGroup,ColorCam,ColorOn 20x 0deg,DObjective,Label,20x 0.5

# Preset: ColorOn 10x 0deg
ConfigGroup,ColorCam,ColorOn 10x 0deg,MicroPublisher6,Color,ON
ConfigGroup,ColorCam,ColorOn 10x 0deg,MicroPublisher6,Color - Algorithm CFA,G-R-B-G
ConfigGroup,ColorCam,ColorOn 10x 0deg,MicroPublisher6,Color - Blue scale,1.0000
ConfigGroup,ColorCam,ColorOn 10x 0deg,MicroPublisher6,Color - Green scale,1.1691
ConfigGroup,ColorCam,ColorOn 10x 0deg,MicroPublisher6,Color - Red scale,1.8056
ConfigGroup,ColorCam,ColorOn 10x 0deg,MicroPublisher6,Exposure,500.0000
ConfigGroup,ColorCam,ColorOn 10x 0deg,DObjective,Label,10x 0.3

# Preset: ColorOn 40x 5deg
ConfigGroup,ColorCam,ColorOn 40x 5deg,MicroPublisher6,Color,ON
ConfigGroup,ColorCam,ColorOn 40x 5deg,MicroPublisher6,Color - Algorithm CFA,G-B-R-G
ConfigGroup,ColorCam,ColorOn 40x 5deg,MicroPublisher6,Color - Blue scale,2.8488
ConfigGroup,ColorCam,ColorOn 40x 5deg,MicroPublisher6,Color - Green scale,1.2352
ConfigGroup,ColorCam,ColorOn 40x 5deg,MicroPublisher6,Color - Red scale,1.0000
ConfigGroup,ColorCam,ColorOn 40x 5deg,MicroPublisher6,Exposure,500.0000
ConfigGroup,ColorCam,ColorOn 40x 5deg,DObjective,Label,40x 0.75

# Preset: ColorOn 10x 50deg
ConfigGroup,ColorCam,ColorOn 10x 50deg,MicroPublisher6,Color,ON
ConfigGroup,ColorCam,ColorOn 10x 50deg,MicroPublisher6,Color - Algorithm CFA,G-B-R-G
ConfigGroup,ColorCam,ColorOn 10x 50deg,MicroPublisher6,Color - Blue scale,3.7246
ConfigGroup,ColorCam,ColorOn 10x 50deg,MicroPublisher6,Color - Green scale,1.0000
ConfigGroup,ColorCam,ColorOn 10x 50deg,MicroPublisher6,Color - Red scale,1.0712
ConfigGroup,ColorCam,ColorOn 10x 50deg,MicroPublisher6,Exposure,4.0000
ConfigGroup,ColorCam,ColorOn 10x 50deg,DObjective,Label,10x 0.3

# Preset: ColorOn 40x 50deg
ConfigGroup,ColorCam,ColorOn 40x 50deg,MicroPublisher6,Color,ON
ConfigGroup,ColorCam,ColorOn 40x 50deg,MicroPublisher6,Color - Algorithm CFA,G-B-R-G
ConfigGroup,ColorCam,ColorOn 40x 50deg,MicroPublisher6,Color - Blue scale,4.0219
ConfigGroup,ColorCam,ColorOn 40x 50deg,MicroPublisher6,Color - Green scale,1.0000
ConfigGroup,ColorCam,ColorOn 40x 50deg,MicroPublisher6,Color - Red scale,1.0146
ConfigGroup,ColorCam,ColorOn 40x 50deg,MicroPublisher6,Exposure,10.0000
ConfigGroup,ColorCam,ColorOn 40x 50deg,DObjective,Label,40x 0.75

# Preset: ColorOn 40x 0deg
ConfigGroup,ColorCam,ColorOn 40x 0deg,MicroPublisher6,Color,ON
ConfigGroup,ColorCam,ColorOn 40x 0deg,MicroPublisher6,Color - Algorithm CFA,G-B-R-G
ConfigGroup,ColorCam,ColorOn 40x 0deg,MicroPublisher6,Color - Blue scale,2.2428
ConfigGroup,ColorCam,ColorOn 40x 0deg,MicroPublisher6,Color - Green scale,1.0140
ConfigGroup,ColorCam,ColorOn 40x 0deg,MicroPublisher6,Color - Red scale,1.0000
ConfigGroup,ColorCam,ColorOn 40x 0deg,MicroPublisher6,Exposure,1000.0000
ConfigGroup,ColorCam,ColorOn 40x 0deg,DObjective,Label,20x 0.5

# Preset: ColorOn 20x 50deg
ConfigGroup,ColorCam,ColorOn 20x 50deg,MicroPublisher6,Color,ON
ConfigGroup,ColorCam,ColorOn 20x 50deg,MicroPublisher6,Color - Algorithm CFA,G-B-R-G
ConfigGroup,ColorCam,ColorOn 20x 50deg,MicroPublisher6,Color - Blue scale,4.1121
ConfigGroup,ColorCam,ColorOn 20x 50deg,MicroPublisher6,Color - Green scale,1.1278
ConfigGroup,ColorCam,ColorOn 20x 50deg,MicroPublisher6,Color - Red scale,1.0000
ConfigGroup,ColorCam,ColorOn 20x 50deg,MicroPublisher6,Exposure,3.5000
ConfigGroup,ColorCam,ColorOn 20x 50deg,DObjective,Label,20x 0.5

# Preset: Raw
ConfigGroup,ColorCam,Raw,MicroPublisher6,Color,OFF
ConfigGroup,ColorCam,Raw,MicroPublisher6,Color - Algorithm CFA,G-R-B-G
ConfigGroup,ColorCam,Raw,MicroPublisher6,Color - Blue scale,1.0000
ConfigGroup,ColorCam,Raw,MicroPublisher6,Color - Green scale,1.0000
ConfigGroup,ColorCam,Raw,MicroPublisher6,Color - Red scale,1.0000
ConfigGroup,ColorCam,Raw,MicroPublisher6,Exposure,131.0000
ConfigGroup,ColorCam,Raw,DObjective,Label,20x 0.5

# Preset: ColorOn 20x 5deg
ConfigGroup,ColorCam,ColorOn 20x 5deg,MicroPublisher6,Color,ON
ConfigGroup,ColorCam,ColorOn 20x 5deg,MicroPublisher6,Color - Blue scale,2.6719
ConfigGroup,ColorCam,ColorOn 20x 5deg,MicroPublisher6,Color - Green scale,1.1167
ConfigGroup,ColorCam,ColorOn 20x 5deg,MicroPublisher6,Color - Red scale,1.0000
ConfigGroup,ColorCam,ColorOn 20x 5deg,MicroPublisher6,Color - Algorithm CFA,G-B-R-G
ConfigGroup,ColorCam,ColorOn 20x 5deg,MicroPublisher6,Exposure,150.0000
ConfigGroup,ColorCam,ColorOn 20x 5deg,DObjective,Label,20x 0.5


# Group: Channel

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,MicroPublisher6,Color,OFF
ConfigGroup,System,Startup,Core,Camera,MicroPublisher6
ConfigGroup,System,Startup,DObjective,Label,10x 0.3
ConfigGroup,System,Startup,MicroPublisher6,Color - Algorithm CFA Auto,OFF


# Group: ObjectiveLens
# Preset: 10x 0.3
ConfigGroup,ObjectiveLens,10x 0.3,DObjective,Label,10x 0.3

# Preset: 40x 0.5 red Pol
ConfigGroup,ObjectiveLens,40x 0.5 red Pol,DObjective,Label,40x 0.5 red Pol

# Preset: 20x 0.5
ConfigGroup,ObjectiveLens,20x 0.5,DObjective,Label,20x 0.5

# Preset: 40x 0.75
ConfigGroup,ObjectiveLens,40x 0.75,DObjective,Label,40x 0.75

# Preset: 20x 0.5 red Pol
ConfigGroup,ObjectiveLens,20x 0.5 red Pol,DObjective,Label,20x 0.5 red Pol

# Preset: 40xAdapter0.5
ConfigGroup,ObjectiveLens,40xAdapter0.5,DObjective,Label,40xAdapter0.5



# PixelSize settings
# Resolution preset: 20x
ConfigPixelSize,20x,DObjective,Label,20x 0.5
PixelSize_um,20x,0.2271
PixelSizeAffine,20x,0.2271705609535764,-2.2213188323249114E-4,0.0,-2.796230429397238E-4,0.226973886050866,0.0
# Resolution preset: 40xAdapter05
ConfigPixelSize,40xAdapter05,DObjective,Label,40xAdapter0.5
PixelSize_um,40xAdapter05,0.2238
PixelSizeAffine,40xAdapter05,0.2238,0.0,0.0,0.0,0.2238,0.0
# Resolution preset: 40x
ConfigPixelSize,40x,DObjective,Label,40x 0.75
PixelSize_um,40x,0.1142
PixelSizeAffine,40x,0.11390888381925744,-3.778232984325081E-4,0.0,-3.4304395951219973E-6,0.11443261618189793,0.0
# Resolution preset: 10x
ConfigPixelSize,10x,DObjective,Label,10x 0.3
PixelSize_um,10x,0.4537
PixelSizeAffine,10x,0.453862934403632,-5.396443612066031E-4,0.0,2.450238676882885E-4,0.4535028802853419,0.0

